PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SENSE_IAT
  exportHTML = on Save
  frameRateMsg = Veuillez patienter...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = False
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      text:
        Bienvenue dans ce Test d'Associations Implicites.

        Pour effectuer ce test, vous n'aurez besoin que de votre clavier. Il durera environ 5 minutes. Vous pouvez quitter le test à tout moment en appuyant sur la touche échap de votre clavier.
    KeyboardComponent welcome_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
      syncScreenRefresh = False
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    TextComponent welcome_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre espace pour passer à l'étape suivante.
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  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent instructions_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent instr_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre espace pour passer à l'étape suivante.
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  Routine words
    RoutineSettingsComponent words
      saveStartStop = False
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    TextComponent all_words
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Voici les catégories et les mots associés utilisés lors de ce test :
        Féminin : Demoiselle, Femme, Tante, Fille, Féminin

        Masculin : Garçon, Homme, Oncle, Fils, Masculin

        Sciences : Biologie, Physique, Chimie, Mathématiques, Informatique

        Lettres : Philosophie, Humanités, Arts, Littérature, Latin
    KeyboardComponent words_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent words_continue
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre espace pour passer à l'étape suivante.
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  Routine ready
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    TextComponent ready_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Voici les catégories dans lesquelles vous devrez classer les mots qui apparaîtront à l'écran.

        Positionnez vos doigts sur les touches "E" et "I".

        Appuyez sur la barre espace pour commencer.
    KeyboardComponent ready_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent ready_cat_left
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_left
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    TextComponent ready_cat_right
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_right
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  Routine trial
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    CodeComponent check_corr
      Code Type = Auto->JS
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      Begin Routine:
        cor_resp = 1
      Each Frame:
        if keyboard_resp.keys:
            if keyboard_resp.keys[0] != CorrAns and len(keyboard_resp.keys) >  0 : #affiche le message "erreur" si la première touche appuyée n'est pas la bonne
                cor_resp = 0
            else:
                cor_resp = 1 #active la condition pour afficher le composant error_msg


        if keyboard_resp.keys:
            if len(keyboard_resp.keys) > 0 and keyboard_resp.keys[-1] == CorrAns: #vérifie si la touche est correcte et passe à l'essai suivant le cas échéant
                keyboard_resp.corr = True
                continueRoutine = False
    CodeComponent compute_score
      Code Type = Auto->JS
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      Begin Experiment:
        rt_block3 = []
        err_block3 = 0
        rt_block5 = []
        err_block5 = 0
        fast_responses = 0
        slow_responses = 0
        total_responses = 0
        num_errors = 0
      End Routine:
        if conds_file == "cong_test.xlsx": #ajout du temps de réponse pour le bloc congruent
            if isinstance(keyboard_resp.rt[-1], float):
                rt_block3.append(keyboard_resp.rt[-1])
                if keyboard_resp.rt[-1] < 0.3: #vérification si la réponse est trop rapide
                    fast_responses = fast_responses + 1
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc congruent
                    err_block3 = err_block3 + 1
        elif conds_file == "incong_test.xlsx": #ajout du temps de réponse pour le bloc incongruent
            if isinstance(keyboard_resp.rt[-1], float):
                rt_block5.append(keyboard_resp.rt[-1]) #vérification si la réponse est trop rapide
                if keyboard_resp.rt[-1] < 0.3:
                    fast_responses = fast_responses + 1
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc incongruent
                    err_block5 = err_block5 + 1

        if keyboard_resp.keys[0] != CorrAns and keyboard_resp.keys: #store le nb total d'erreurs
            num_errors = num_errors+ 1

        if keyboard_resp.rt[-1] > 3 and keyboard_resp.keys: #verification si la réponse est trop lente
            slow_responses = slow_responses + 1

        total_responses = total_responses + 1 #nb total d'essais

        keyboard_resp.keys = []
    TextComponent fixation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent trial_cat_left
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $label_left
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    TextComponent trial_cat_right
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $label_right
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    TextComponent text_stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimWord
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    KeyboardComponent keyboard_resp
      allowedKeys [set every repeat] = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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    TextComponent error_msg
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = $cor_resp == 0
      text [set every repeat] = Erreur
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  Routine transition
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine score
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    CodeComponent score
      Code Type = Both
      Begin JS Routine:
        rt_block3_cleaned = [];
        rt_block5_cleaned = [];
        mean_rt_block3 = 0;
        mean_rt_block5 = 0;
        std_rt_block3 = 0;
        std_rt_block5 = 0;
        sumOfSquares3 = 0;
        sumOfSquares5 = 0;
        variance3 = 0;
        variance5 = 0;
        pooled_std = 0;
        iat_score = 0;
        if (((fast_responses / total_responses) > 0.1)) {
            score_msg = "Vous avez répondu trop rapidement pour obtenir un score valide. Recommencez le test en répondant correctement et sans vous précipiter.";
            err_msg = (("Vous avez fait " + num_errors.toString()) + " erreurs.");
        } else {
            if (((slow_responses / total_responses) > 0.05)) {
                score_msg = "Vous avez répondu trop lentement pour obtenir un score valide. Recommencez le test en répondant correctement le plus rapidement possible.";
                err_msg = (("Vous avez fait " + num_errors.toString()) + " erreurs.");
            } else {
                rt_block3_cleaned = function () {
            var _pj_a = [], _pj_b = rt_block3;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var rt = _pj_b[_pj_c];
                if (((0.2 <= rt) && (rt <= 2))) {
                    _pj_a.push(rt);
                }
            }
            return _pj_a;
        }
        .call(this);
                rt_block5_cleaned = function () {
            var _pj_a = [], _pj_b = rt_block5;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var rt = _pj_b[_pj_c];
                if (((0.2 <= rt) && (rt <= 2))) {
                    _pj_a.push(rt);
                }
            }
            return _pj_a;
        }
        .call(this);
                if (rt_block3_cleaned) {
                    mean_rt_block3 = (util.sum(rt_block3_cleaned) / rt_block3_cleaned.length);
                } else {
                    mean_rt_block3 = 0;
                }
                if (rt_block5_cleaned) {
                    mean_rt_block5 = (util.sum(rt_block5_cleaned) / rt_block5_cleaned.length);
                } else {
                    mean_rt_block5 = 0;
                }
                if ((rt_block3_cleaned.length > 1)) {
                    sumOfSquares3 = rt_block3_cleaned.reduce((sum, x) => sum + Math.pow(x - mean_rt_block3, 2), 0);
                    variance3 = sumOfSquares3 / (rt_block3_cleaned.length - 1);
                    std_rt_block3 = Math.sqrt(variance3);
                } else {
                    std_rt_block3 = 0;
                }
                if ((rt_block5_cleaned.length > 1)) {
                    sumOfSquares5 = rt_block5_cleaned.reduce((sum, x) => sum + Math.pow(x - mean_rt_block5, 2), 0);
                    variance5 = sumOfSquares5 / (rt_block5_cleaned.length - 1);
                    std_rt_block5 = Math.sqrt(variance5);
                } else {
                    std_rt_block5 = 0;
                }
                if (((rt_block3_cleaned.length > 1) && (rt_block5_cleaned.length > 1))) {
                    pooled_std = ((((rt_block3_cleaned.length - 1) * Math.pow(std_rt_block3, 2)) + ((rt_block5_cleaned.length - 1) * Math.pow(std_rt_block5, 2))) / Math.pow(((rt_block3_cleaned.length + rt_block5_cleaned.length) - 2), 0.5));
                } else {
                    pooled_std = 0;
                }
                if (((num_errors === 0) && (pooled_std !== 0))) {
                    iat_score = ((mean_rt_block5 - mean_rt_block3) / pooled_std);
                } else {
                    if ((pooled_std !== 0)) {
                        iat_score = (((mean_rt_block5 + (err_block5 / num_errors)) - (mean_rt_block3 + (err_block3 / num_errors))) / pooled_std);
                    } else {
                        iat_score = 0;
                    }
                }
                score_msg = ("Votre score à l'IAT est de " + iat_score.toString().slice(0, 5));
                err_msg = (("Vous avez fait " + num_errors.toString()) + " erreurs");
            }
        }


        /* DEBUG */
        m3 = mean_rt_block3.toString();
        m5 = mean_rt_block5.toString();
        s3 = std_rt_block3.toString();
        s5 = std_rt_block5.toString();
        ps = pooled_std.toString();
        iscore = iat_score.toString();
        sOOs = rt_block3_cleaned.reduce((sum, x) => sum + Math.pow(x - mean_rt_block3, 2), 0)
        sOs = sumOfSquares3.toString();
        svariance = variance3.toString();
        liste_clean = rt_block3_cleaned.map(rt => rt.toFixed(1)).join(', ');
        score_sans_err = ((mean_rt_block5 - mean_rt_block3) / pooled_std);
        sse = score_sans_err.toString();
        sse = ("Score sans erreur" + score_sans_err.toString().slice(0, 5));
        score_avec_err = (((mean_rt_block5 + (err_block5 / num_errors)) - (mean_rt_block3 + (err_block3 / num_errors))) / pooled_std);
        sae = score_avec_err.toString();
      Begin Routine:
        rt_block3_cleaned = []
        rt_block5_cleaned = []
        mean_rt_block3 = 0
        mean_rt_block5 = 0
        std_rt_block3 = 0
        std_rt_block5 = 0
        pooled_std = 0
        iat_score = 0

        # Calcul des données
        if (fast_responses / total_responses) > 0.1:
            score_msg = "Vous avez répondu trop rapidement pour obtenir un score valide. Recommencez le test en répondant correctement et sans vous précipiter."
            err_msg = "Vous avez fait " + str(num_errors) + " erreurs."
        elif (slow_responses / total_responses) > 0.05:
            score_msg = "Vous avez répondu trop lentement pour obtenir un score valide. Recommencez le test en répondant correctement le plus rapidement possible."
            err_msg = "Vous avez fait " + str(num_errors) + " erreurs."
        else:
            # Retirer les éléments aberrants
            rt_block3_cleaned = [rt for rt in rt_block3 if 0.2 <= rt <= 2]
            rt_block5_cleaned = [rt for rt in rt_block5 if 0.2 <= rt <= 2]

            # Calcul des moyennes
            if rt_block3_cleaned:
                mean_rt_block3 = sum(rt_block3_cleaned) / len(rt_block3_cleaned)
            else:
                mean_rt_block3 = 0

            if rt_block5_cleaned:
                mean_rt_block5 = sum(rt_block5_cleaned) / len(rt_block5_cleaned)
            else:
                mean_rt_block5 = 0

            # Calcul des écarts types
            if len(rt_block3_cleaned) > 1:
                std_rt_block3 = (sum((x - mean_rt_block3) ** 2 for x in rt_block3_cleaned) / (len(rt_block3_cleaned) - 1)) ** 0.5
            else:
                std_rt_block3 = 0

            if len(rt_block5_cleaned) > 1:
                std_rt_block5 = (sum((x - mean_rt_block5) ** 2 for x in rt_block5_cleaned) / (len(rt_block5_cleaned) - 1)) ** 0.5
            else:
                std_rt_block5 = 0

            # Calcul de l'écart type groupé
            if len(rt_block3_cleaned) > 1 and len(rt_block5_cleaned) > 1:
                pooled_std = ((len(rt_block3_cleaned) - 1) * std_rt_block3 ** 2 + (len(rt_block5_cleaned) - 1) * std_rt_block5 ** 2) / (len(rt_block3_cleaned) + len(rt_block5_cleaned) - 2) ** 0.5
            else:
                pooled_std = 0

            # Calcul du score IAT
            if num_errors == 0 and pooled_std != 0:
                iat_score = (mean_rt_block5 - mean_rt_block3) / pooled_std #score sans prendre en compte les erreurs
            elif pooled_std != 0:
                iat_score = ((mean_rt_block5 + err_block5 / num_errors) - (mean_rt_block3 + err_block3 / num_errors)) / pooled_std
            else:
                iat_score = 0

            # Affichage des résultats
            score_msg = "Votre score à l'IAT est de "+str(iat_score)[:5]
            err_msg = "Vous avez fait "+str(num_errors)+" erreurs"

        ''' DEBUG '''
        m3 = str(mean_rt_block3)
        m5 = str(mean_rt_block5)

        s3 = str(std_rt_block3)
        s5 = str(std_rt_block5)

        ps = str(pooled_std)
        iscore = str(iat_score)

        sOs = str(2)
        variance = str(2)
        sse = str((mean_rt_block5 - mean_rt_block3) / pooled_std)
    TextComponent score_feedback
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $score_msg
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    TextComponent score_meaning
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Un score positif indique que vous avez tendance à associer les hommes aux sciences et les femmes aux lettres, ce qui correspond à la vision stéréotypée. Plus il est élevé, plus les associations sont fortes.
        A l'inverse, un score négatif indique une association forte entre les femmes et les sciences et les hommes et les lettres.

        Pour terminer le test, appuyez sur la barre espace.
    KeyboardComponent end_score
      allowedKeys = 'space',
      correctAns = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent err_feedback
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $err_msg
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    TextComponent score_bis
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sse
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  Routine end
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ce test d'associations implicites est terminé. Nous vous remercions d'y avoir pris part. Aucune donnée n'est conservée à l'issue de ce test, qui ne sert qu'à rendre compte de ses propres stéréotypes. Ainsi, si votre score est positif, vous êtes sujets aux stéréotypes sur les femmes dans les sciences.

        Vous pouvez quitter l'expérience en appuyant sur n'importe quelle touche.
    KeyboardComponent end_key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
      syncScreenRefresh = False
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Flow
  LoopInitiator restart loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine welcome
    LoopInitiator instructions_loop loopType="TrialHandler"
      conditionsFile = instructs.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'pageNum': 1, 'instruct_text': 'Des mots vont apparaître au centre de l\'écran. Vous devrez les classer en utilisant les touches "E" et "I" de votre clavier.\n\nEssayez d\'être le plus rapide possible et de ne pas faire d\'erreurs.'},
        {'pageNum': 2, 'instruct_text': 'Les touches "E" et "I" du clavier seront toujours associées à une catégorie qui sera affichée.\nChaque mot a une classification correcte. En cas d\'erreur, elle sera affichée et vous devrez appuyer sur la touche correcte pour continuer.\nGardez vos doigts sur les touches "E" et "I" pour garantir un temps de réponse rapide.\nLe test ne donne pas de résultat si vous répondez trop rapidement ou trop lentement.'}]
      Routine instructions
    LoopTerminator instructions_loop
    Routine words
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = blocks_order.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'conds_file': 'pos_neg_train.xlsx', 'label_left': '"E" = Sciences', 'label_right': '"I" =  Lettres'},
        {'conds_file': 'cong_train.xlsx', 'label_left': '"E" = Masculin', 'label_right': '"I" =  Féminin'},
        {'conds_file': 'cong_test.xlsx', 'label_left': '"E" = Masculin\nou Sciences', 'label_right': '"I" =  Féminin\nou Lettres'},
        {'conds_file': 'incong_train.xlsx', 'label_left': '"E" = Féminin', 'label_right': '"I" =  Masculin'},
        {'conds_file': 'incong_test.xlsx', 'label_left': '"E" = Féminin\nou Sciences', 'label_right': '"I" =  Masculin\nou Lettres'}]
      Routine ready
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $conds_file
        loopType = random
        nReps = 1
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        Routine trial
        Routine transition
      LoopTerminator trials
    LoopTerminator blocks
    Routine score
  LoopTerminator restart
  Routine end
